MacroName Timed Low Mag Cook With Wobble

MinWobbleDist = 10
MaxWobbleDist = 20
WobbleDist = 20

ReportStageXYZ
XStart = $reportedvalue1
YStart = $reportedvalue2

EnterDefaultedNumber 7 2 Number of minutes to cook?
SecondsToCook = $reportedvalue1 * 60

echo BEGIN BURN WOBBLE
ResetClock
Loop 200000 iLoop
   If $WobbleDist > $MaxWobbleDist
      WobbleDist = $MinWobbleDist
   EndIf

   # Arrays of stage position deltas:
   ShiftXList = {$WobbleDist (0 - $WobbleDist) (0 - $WobbleDist) $WobbleDist 0 0 0 0}
   ShiftYList = {0 0 0 0 $WobbleDist (0 - $WobbleDist) (0 - $WobbleDist) $WobbleDist}

   Loop 8 iShift
      ShiftX = $ShiftXList[$iShift]
      ShiftY = $ShiftYList[$iShift]
      MoveStage $ShiftX $ShiftY
      CallFunction WaitForStageNotBusy
      ReportClock
      If $reportedValue1 >= $SecondsToCook
         echo END BURN WOBBLE
         SetSpotSize 4
         Record
         Return
      Endif
   EndLoop
   
   MoveStageTo $XStart $YStart
   ReportStageXYZ
   reportclock

   WobbleDist = $WobbleDist  + 1
EndLoop

Function WaitForStageNotBusy
   Loop 20000 iStageWait
      ReportStageBusy
      StageIsBusy = $reportedvalue1
      if $StageIsBusy == 0
         break
      endif
      Delay 500 msec
   EndLoop
EndFunction
