MacroName ScopeUtil

# Globally set the variable $ScopeName
ScopeName := TEM2

# Globally set the variable $MessageDir
MessageDir := \\192.168.3.10\Dropbox\Notification\$ScopeName
V2MessageDir := Y:/Notification/$ScopeName

# Globally set the variable $MessagePath
MessagePath := $MessageDir\message.txt
V2MessagePath := $V2MessageDir/message.txt

# Globally set the variable $DropboxPath
DropboxPath := Y:

# Globally set the variable $CopyDir
CopyPath := $DropboxPath\TEMXcopy

# Globally set the variable $DataPath
DataPath := G:

# Globally set the variable PrecookMontageD
PrecookMontageD := 0

# Globally set the variable SecondsPerTile
SecondsPerTile := 15

##################################
# Change MaxPercentChangeOverCapture to adjust sensitivity of filament stability.  
# Must be a value 0 to 1.0.
#################################
MaxPercentChangeOverCapture := 0.15

OpenNavigator