MacroName Snapshot

# When called directly, this macro prompts for a section # and label, and asks yes/no whether to send to Slack.
EnterString label "section # and label"
YesNoBox "send snapshot to Slack?"

CallFunction Snapshot::TakeSnapshot $reportedValue1 $label

# Function for automated use: saves a snapshot of the current image to our DROPBOX.
# If called with 1 for the first argument, will also send this image to slack in the #tem-bot channel
Function TakeSnapshot 1 1 SendToSlack Name
   Call ScopeUtil
   # Reports the current mag; also sets reportedValue2 to 1 if low mag mode, 0 if not
   ReportMag
   Filename @= TEMSnapshots\$Name x$reportedValue1 $ScopeName.jpg
   FilenameInDropbox @= $DropboxPath\$Filename
   # Takes a snapshot of the image display in the current active buffer and saves it to the file with the given name and closes the file.
   #  #S sets the amount of image scaling relative to the display with a value of 1 or greater, or 0 or less to take the whole image at 1:1 zoom.
   #  #T sets the scaling of text labels and line thicknesses with a value of 1 or more, or 0 or less to use the same scaling as for the image.
   #  Set feat non-zero to skip feature drawing, with the sum of 1 to skip some features and 2 to skip Navigator items.  typ specifies the
   # type of file and can be TIF, TIFF, JPG, JPEG, CUR, or -1 (case insensitive), where CUR or -1 means use the current file type 
   # selected in the Image Snapshots dialog.  cmp specifies the compression for a TIFF file and can be NONE,  LZW, ZIP, JPG, 
   # JPEG, CUR, or -1 (case insensitive), where CUR or -1 means use the current compression in the Image Snapshots dialog. 
   # If JPG or JPEG is entered for 'typ', a true JPEG file will be written, not a JPEG-compressed TIFF, and the compression 
   # entry does not matter (but must be present before the filename file). 
   # SnapshotToFile #S #T feat typ cmp file
   Try
      SnapshotToFile 0 0 0 JPG -1 $FilenameInDropbox
   Catch
      Try
         SaveToOtherFile B JPG -1 $FilenameInDropbox
      Catch
         CallFunction Notifications::SendMessage SnapshotToFile and SaveToOtherFile both failed for snapshot $Filename
         Return
      EndTry
   EndTry
   If $SendToSlack != 0
      CallFunction Notifications::SendMessage Snapshot: $Filename
   EndIf
EndFunction