MacroName NotificationsV2

# Test:
CallFunction NotificationsV2::SendMessage Test message

Function SendMessage 0 1 Text
PythonScript $MessageDirV2 $MessagePathV2 $Text
#!Python3.9
import serialem as sem
import os
MessageDir, MessagePath, Text = SEMargStrings

# Make sure there is a message file to append to
os.makedirs(MessageDir, exist_ok=True)
# Append to the file so multiple messages aren't overwritten
with open(MessagePath, "a+") as MessageFile:
   MessageFile.write("{}{}".format(Text, os.linesep))
EndPythonScript
EndFunction

Function SendStart 0 0
PythonScript $SecondsPerTile $ScopeName
#!Python3.9
import serialem as sem
EstimatedCaptureHours = 0
NumTiles = 0
SecondsPerTile, ScopeName = SEMargStrings
if sem.ReportNumTableItems() < 1:
   print("Nav table does not have items indicating total capture time.")
else:
   NumTiles = sem.ReportNumMontagePieces(1)
      
   if NumTiles == 1:
      print("Montage claims to have only one image. Using 1 hour as timeframe")
      EstimatedCaptureHours = 1
   else:
      EstimatedCaptureTime = NumTiles * SecondsPerTile
      EstimatedCaptureHours = EstimatedCaptureTime / (60 * 60)
   print("Estimating {} hours to complete".format(EstimatedCaptureHours)
   sem.SetVariable("NumTiles", NumTiles)
   sem.SetVariable("EstimatedCaptureHours", EstimatedCaptureHours)
EndPythonScript
CallFunction NotificationsV2::SendMessage Started: Capturing $NumTiles images on $ScopeName. Estimating $EstimatedCaptureHours hours to complete
EndFunction

Function SendStop 0 0
   CallFunction NotificationsV2::SendMessage Copied: $CaptureDir copied from $ScopeName to DROPBOX.
EndFunction