MacroName ScopeUtil

# Globally set the variable $ScopeName
Function SetScopeName
   ScopeName = TEM1
EndFunction

# Globally set the variable $MessageDir
Function SetMessageDir
   CallFunction ScopeUtil::SetScopeName
   MessageDir = N:\$ScopeName
EndFunction

# Globally set the variable $MessagePath
Function SetMessagePath
   CallFunction ScopeUtil::SetMessageDir
   MessagePath = $MessageDir\message.txt
EndFunction

# Globally set the variable $DropboxPath
Function SetDropboxPath
	DropboxPath = Z:
EndFunction

# Globally set the variable $CopyDir
Function SetCopyPath
	CallFunction ScopeUtil::SetDropboxPath
	CopyPath = $DropboxPath\TEMXcopy
EndFunction

# Globally set the variable $DataPath
Function SetDataPath
	DataPath = D:
EndFunction

# Globally set the variable PrecookMontageD
Function SetPrecookMontageD
	PrecookMontageD = 1
EndFunction