SerialEMSettings
SystemPath	C:\ProgramData\SerialEM
ScriptPackagePath	Y:\nat\tem2package-2021-06-15-19-04-46.txt
CameraControlSet  1  0
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	1
ShutteringMode	0
Top	1429
Left	1429
Right	2667
Bottom	2667
ExposureTime	0.100000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.160000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 -1 -1 -1 -1 -1 -1 -1
BoostMag 0 0
EndControlSet
CameraControlSet  2  0
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	0.100000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.040000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 -1 -1 -1 -1 -1 -1 -1
BoostMag 0 0
EndControlSet
CameraControlSet  3  0
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	10
RemoveXrays	0
Binning	1
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	0.300000
DriftSettling	0.200000
LineSync	0
DynamicFocus	0
CorrectDrift	1
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.120000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 -1 -1 -1 -1 -1 -1 -1
BoostMag 0 0
EndControlSet
CameraControlSet  4  0
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	8
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	0.010000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.040000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 -1 -1 -1 -1 -1 -1 -1
BoostMag 0 0
EndControlSet
CameraControlSet  5  0
AcquisitionMode	1
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	4
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	0.020000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.040000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 -1 -1 -1 -1 -1 -1 -1
BoostMag 0 0
EndControlSet
CameraControlSet  6  0
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	10
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	1.000000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.040000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 -1 -1 -1 -1 -1 -1 -1
BoostMag 0 0
EndControlSet
FrameNameData 384 0 -1 -1 3
DirForFalconFrames NotSetByUser
PercentDisplayTruncationLo	0.100000
PercentDisplayTruncationHi	0.100000
ProtectRecordImages	0
MontageUseContinuous 0 0.100000
MontageNoDriftCorr 1 0
MontageFilterOptions 0 0 0 0
TIFFcompression	1
FileOptionsPctTruncLo	0.200000
FileOptionsPctTruncHi	0.200000
SingleFileOptions 2 1 0.200000 0.500000
AutofocusEucenAbsParams 0.000000 0.000000 -20.000000 20.000000 0 1
AreaFractionForScaling	0.800000
FFTTruncDiameter	0.004000
FFTBackgroundGray	32
UseViewForSearch	0
UseRecordForMontage	0
SettingsFixedForIACal	0
OneK2FramePerFile	0
SkipK2FrameRotFlip	0
SaveK2FramesAsTiff	0
SaveRawPacked	0
SaveTimes100	0
SaveUnnormedFrames	0
Use4BitMRCMode	0
SaveSuperResReduced	0
TakeK3SuperResBinned	0
UseK3CDS	0
NameFramesAsMRCS	0
SaveFrameStackMdoc	0
AntialiasBinning	1
NumFrameAliLogLines	2
BuffersToRollOnAcquire	12
BufferToReadInto	14
FifthCopyToBuf	4
AutoZoom	1
Antialias	1
FixedZoomSteps	1
DrawScaleBar	192
DrawCrosshairs	1
MontageCorrectDrift	1
MontageAdjustFocus	0
MontageFocusAfterStage	1
MontageShowOverview	1
MontageAlignPieces	1
MontageVerySloppy	1
MontageMinimumCounts	5
MontageUseMontMap	0
MontageUseViewInLD	0
MontageUseSearchInLD	0
MontageUseHQparams	1
MontageFocusInBlocks	0
MontageRepeatFocus	0
MontageDriftLimit	2.000000
MontageRealign	0
MontageISRealign	1
MontageMaxRealignIS	10.000000
MontageUseAnchor	1
MontageAnchorMagInd	30
MontageSkipCorrelations	1
MontageSkipReblanks	0
MontageFocusBlockSize	2
MontageRealignInterval	16
MontageMinOverlapFactor	0.120000
MontageMinMicronsOverlap	0.500000
MontageHQdelayTime	0.000000
MontageMaxAlignFrac	0.600000
SelectedCameraParameterSet	3
TargetDefocus	-0.500000
AutofocusOffset	0.000000
RefocusThreshold	8.000000
AbortThreshold	1.000000
AutofocusBeamTilt	3.500000
BeamTiltDirection	0
MinDDDfocusBinning	1
DriftProtection	1
FocusVerbose	0
TiltIncrement	5.000000
CosineTilting	0
ShiftToTiltAxis	0
ApplyISoffset	0
UsePiezoForLDAxis	0
AdjustFocusForProbe	0
NormalizeAllOnMagChange	0
NormAutofocusViaView	0
SkipBlankingInLowDose	0
TrimBordersInAutoalign	1
DisableAutoTrim	0
MoveStageOnBigMouseShift	1
BacklashMouseAndISR	0
MouseStageThreshold	0.000000
MouseStageAbsoluteThreshold	2.000000
TiltDelay	2.000000
MacroLimitRuns	0
MacroLimitScaleMax	0
MacroLimitTiltUp	0
MacroLimitTiltDown	0
MacroLimitMontError	0
MacroLimitIS	0
MacroRunLimit	500
SerialEM_ScriptscaleMaxLimit	50
MacroTiltUpLimit	80.000000
MacroTiltDownLimit	-80.000000
MacroMontErrorLimit	1.000000
MacroISLimit	10.000000
ScriptIndentSize	3
RestoreMacroEditors	1
CircleOnLiveFFT	0
SideBySideFFT	0
AutoSingleFFT	1
PhasePlateShift	0.000000
ImageReductionFac	4.000000
FixedRingDefocus	0.000000
UserMaxCtfFitRes	0.000000
MinCtfFitResIfPhase	0.000000
AutosaveSettings	0
AutosaveNavNew	1
SkipFileDlg	1
AutosaveLog	1
AutosaveXYZ	1
StageMoveToolImage	0
LoadMapsUnbinned	1
WriteNavAsXML	0
TryRealignScaling	1
PlusMinusRIScaling	0
PointLabelDrawThresh	15
MultiShotEnable	0
RotAlignDoSearch	1
RotAlignRange	20.000000
GridGroupSize	5.000000
DivideGridIntoGroups	0
RIuseCurrentLDparams	0
SkipMontFitDlgs	1
CameraDivide16BitBy2	0
ExtraDivideBy2	0
AcquireFloatImages	0
InterpolateDarkRefs	0
NoNormOfDSDoseFrac	0
ComPathIsFramePath	0
IgnoreHigherGainRefs	0
UseOlderBinned2Ref	0
DMgainRefAskPolicy	0
GainRefCalibrateDose	1
LowDoseBlankWhenDown	0
LowDoseNormalizeBeam	0
LowDoseViewDefocus	0.000000
LowDoseSearchDefocus	0.000000
LowDoseTieFocusTrial	0
LowDoseRotateAxis	0
LowDoseAxisAngle	0
WalkUpTargetAngle	-60.000000
WalkUpMaxInterval	8.000000
WalkUpMinInterval	3.000000
WalkSTEMfocusInterval	19.000000
ResetRealignUseTrialInLowDose	0
FineEucenUseTrialInLowDose	0
WalkupUseViewInLowDose	0
ComplexTasksVerbose	1
UsersAstigTilt	-1.000000
MenuZemlinTilt	6.000000
UsersComaTilt	-1.000000
CtfExposure	-1.000000
CtfDriftSettling	0.000000
CtfBinning	0
CtfUseFullField	1
CtfDoFullArray	0
ComaIterationThresh	1.000000
ComaVsISextent	3.000000
MinCtfBasedDefocus	-0.900000
TiltSeriesLastStartingTilt	15.000000
TiltSeriesTrackLowMag	0
TiltSeriesTrackAfterFocus	0
TiltSeriesBeamControl	0
TiltSeriesMeanCounts	5000
TiltSeriesCosinePower	1
TiltSeriesTaperCounts	0
TiltSeriesHighCounts	4000
TiltSeriesTaperAngle	50.000000
TiltSeriesLimitIntensity	0
TiltSeriesRefineEucentricity	1
TiltSeriesWalkLeaveAnchor	1
TiltSeriesWalkAnchorTilt	45.000000
TiltSeriesLeftAnchorBuffer	19
TiltSeriesImageShiftLimit	1.500000
TiltSeriesFocusCheckInterval	5.000000
TiltSeriesRepeatRecord	1
TiltSeriesConfirmLDRepeat	1
TiltSeriesMaxRecordLoss	0.030000
TiltSeriesStopOnBigShift	0
TiltSeriesMaxAlignShift	30.000000
TiltSeriesRepeatAutofocus	1
TiltSeriesMaxFocusDiff	0.250000
TiltSeriesAlwaysFocusAtHigh	0
TiltSeriesAlwaysFocusAngle	50.000000
TiltSeriesSkipAutofocus	0
TiltSeriesCheckAutofocus	1
TSLimitFocusChange	0
TSFocusChangeLimit	20.000000
TiltSeriesMinFocusAccuracy	0.250000
TiltSeriesRefineZLP	0
TiltSeriesZLPInterval	15
TiltSeriesCenterBeam	0
TiltSeriesCloseValvesAtEnd	0
TiltSeriesAlignTrackOnly	0
TiltSeriesPreviewBeforeNewRef	1
TiltSeriesMaxRefDisagreement	0.050000
TiltSeriesMaxPredictErrorXY	0.015000
TiltSeriesMaxPredictErrorZ	0.200000
TiltSeriesMaxPredictErrorZSN	0.200000
TiltSeriesMaxPredictErrorZSM	1.000000
TiltSeriesCenBeamPeriodically	0
TiltSeriesCenBeamInterval	60
TiltSeriesCenBeamAbove	0
TiltSeriesCenBeamAngle	50.000000
TiltSeriesStackRecords	0
TSWaitForDrift	0
TSOnlyWaitAboveBelow	0
TSWaitAboveAngle	45.000000
TSWaitBelowAngle	30.000000
TSWaitAtReversals	0
TSWaitDosymIgnore	0
TSDoEarlyReturn	0
TSNumEarlyFrames	1
TiltSeriesStackBinSize	512
TiltSeriesExtraSetExposure	0
TiltSeriesExtraSetSpot	0
TiltSeriesExtraSpotSize	0
TiltSeriesExtraDeltaIntensity	1.000000
TiltSeriesExtraDrift	0.000000
TiltSeriesExtraSetBinning	0
TiltSeriesExtraBinIndex	0
TiltSeriesDoVariations	0
TiltSeriesChangeRecExposure	0
TiltSeriesChangeAllExposures	0
TiltSeriesChangeSettling	0
TiltSeriesExposureStep	1.200000
ExposureSeriesFixNumFrames	0
TiltSeriesTiltFailPolicy	1
TiltSeriesLDDimRecordPolicy	1
TiltSeriesTermNotAskOnDim	0
TiltSeriesLDRecordLossPolicy	1
TiltSeriesAutoTerminatePolicy	1
TSSeparateExtraRec	0
TiltSeriesAutoSavePolicy	1
TSCallPlugins	0
TSFixedNumFrames	0
TSSkipBeamShiftOnAlign	0
TSAllowContinuous	0
EmailAfterTiltSeries	0
ReorderDoseSymFile	1
FilterSlitWidth	20.000000
FilterEnergyLoss	0.000000
FilterZeroLoss	0
FilterChangeMagWithScreen	0
FilterMatchPixel	1
FilterMatchIntensity	1
FilterDoMagShifts	1
STEMmatchPixel	1
ScreenSwitchSTEM	0
InvertSTEMimages	0
BlankBeamInSTEM	0
RetractToUnblankSTEM	0
KeepPixelTime	0
RightBorderFrac	0.000000
BottomBorderFrac	0.001440
MainFFTsplitFrac	0.500000
AutoBacklashNewMap 1 5.000000
MultiShotParams 0.200000 0.500000 6 1 0 0 0 2.000000 0 0 1 0 1.500000 1.000000 1.000000 1.000000 1.000000 2 2 0 0 0 0 3 0.250000 -999.000000 -999.000000 -999.000000
HoleFinderParams 2.000000 1.000000 0 -100000000.000000 -100000000.000000 -100000000.000000 -100000000.000000 1 0 0
HoleFiltSigmas 1.500000 2.000000 3.000000 -3.000000
HoleEdgeThresholds 2.400000 3.600000 4.800000
HoleCombinerParams 0 0
DriftWaitParams 1 1.000000 0 10.000000 60.000000 1 0 0.200000 4 0
NavigatorAcquireParams 1 0 0 1 0 2 2 0 0 0 1 0 13 0 0 0 0 1 0 11 1
CookerParams -1 -1 -1.000000 2000 0 10.000000 1 0 60.000000 -999 -999
VppConditionParams -1 3 0.500000 -999 1 100 50 0 0 0 0 15 -999 -999
VppCondNavText VPPC
SnapshotParams 0 2.000000 1 0.000000 0 1 80 0 -999 -999
RangeFinderParams 0 0 0 0 0 50.000000 60.000000 2.000000 0 -999 -999
RangeFinderParams 1 0 0 0 0 50.000000 60.000000 2.000000 0 -999 -999
ImportOverlayChannels 121
ProcessOverlayChannels ABA
CtffindParams 0 1 0 0 2.500000 0 1 30 120
ToolDialogStates2 3 1 1 3 1 0 1 3 0 0 0 0 0 0 0 0
MacroButtonNumbers 0 8 12
RemoteControlParams 1 0.050000 0.500000 1 6 0 6
WindowPlacement	1
-1 -1 -1 -1 1428 21 3838 2078
LogPlacement 1 1 -1 -1 0 2061 241 1427 1284 2032
NavigatorPlacement 1 1 -1 -1 -1 -1 456 161 1322 1210
StatePlacement 0 1 -1 -1 -1 -1 236 227 602 642
SnapshotPlacement 0 1 -1 -1 -1 -1 500 400 919 862
MacroToolPlacement 0 1 -1 -1 -1 -1 79 365 401 1157
OneLinePlacement 0 1 -1 -1 -1 -1 0 1079 438 1400
OneEditerPlacement 0 0 1 -1 -1 -1 -1 690 247 1726 1776
OneEditerPlacement 1 0 1 -1 -1 -1 -1 1445 340 3293 1869
OneEditerPlacement 2 0 1 -1 -1 -1 -1 720 239 1756 1768
OneEditerPlacement 3 0 1 -1 -1 -1 -1 704 173 1127 779
OneEditerPlacement 4 0 1 -1 -1 -1 -1 1994 194 3677 1722
OneEditerPlacement 5 0 1 -1 -1 -1 -1 800 0 1600 1200
OneEditerPlacement 6 0 1 -1 -1 -1 -1 800 0 1600 1200
OneEditerPlacement 8 0 1 -1 -1 -1 -1 1152 254 2458 1817
OneEditerPlacement 9 0 1 -1 -1 -1 -1 690 247 1726 1776
OneEditerPlacement 10 0 1 -1 -1 -1 -1 704 0 1674 1440
OneEditerPlacement 11 0 1 -1 -1 -1 -1 738 91 2148 1440
OneEditerPlacement 12 0 1 -1 -1 -1 -1 262 235 1298 1764
OneEditerPlacement 13 0 1 -1 -1 -1 -1 704 173 1127 779
OneEditerPlacement 15 0 1 -1 -1 -1 -1 1387 327 2560 1349
OneEditerPlacement 18 0 1 -1 -1 -1 -1 1177 393 1600 999
OneEditerPlacement 19 0 1 -1 -1 -1 -1 1672 391 2708 1920
OneEditerPlacement 31 0 1 -1 -1 -1 -1 690 247 1726 1776
OneEditerPlacement 34 0 1 -1 -1 -1 -1 11 99 434 705
OneEditerPlacement 38 0 1 -1 -1 -1 -1 2843 312 3763 1984
OneEditerPlacement 39 0 1 -1 -1 -1 -1 2258 341 3178 2013
MacroToolbarButtons 20 31
LowDoseParameters 0 0 0 0.000000 0.000000 0 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 -1 0 0.000000 0.000000
LowDoseParameters 1 0 0 0.000000 0.000000 0 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 -1 0 0.000000 0.000000
LowDoseParameters 2 0 0 0.000000 0.000000 0 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 -1 0 0.000000 0.000000
LowDoseParameters 3 0 0 0.000000 0.000000 0 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 -1 0 0.000000 0.000000
LowDoseParameters 4 0 0 0.000000 0.000000 0 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 -1 0 0.000000 0.000000
LowDoseParameters 0 0 0 0.000000 0.000000 1 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 -1 0 0.000000 0.000000
LowDoseParameters 1 0 0 0.000000 0.000000 1 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 -1 0 0.000000 0.000000
LowDoseParameters 2 0 0 0.000000 0.000000 1 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 -1 0 0.000000 0.000000
LowDoseParameters 3 0 0 0.000000 0.000000 1 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 -1 0 0.000000 0.000000
LowDoseParameters 4 0 0 0.000000 0.000000 1 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 -1 0 0.000000 0.000000
LowDoseParameters 0 0 0 0.000000 0.000000 2 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 -1 0 0.000000 0.000000
LowDoseParameters 1 0 0 0.000000 0.000000 2 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 -1 0 0.000000 0.000000
LowDoseParameters 2 0 0 0.000000 0.000000 2 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 -1 0 0.000000 0.000000
LowDoseParameters 3 0 0 0.000000 0.000000 2 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 -1 0 0.000000 0.000000
LowDoseParameters 4 0 0 0.000000 0.000000 2 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 -1 0 0.000000 0.000000
LowDoseViewShift 0.000000 0.000000
LDSearchShift 0.000000 0.000000
TiltSeriesLowMagIndex 20 0 0
TiltSeriesBidirParams	0 0.000000 1 0 0
TiltSeriesDoseSymParams	0 1 0 30.000000 1 1 0 45.000000 0 10 1.000000 0
TiltSeriesBDAnchorMags 34 0 0 19 0 0
TiltSeriesRunMacro	0 0 4
TSTermOnHighExposure	0 3.000000
TiltSeriesBidirDimPolicy	1 55 5
CloseValvesDuringMessageBox 1 30.000000
TSSetupPanelStates 1 1 0 0 0 1 0
NonGIFMatchPixelIntensity 0 0
ImageXrayCriteria 0 200.000000 15.000000 1
ImageXrayCriteria 1 200.000000 15.000000 1
ImageXrayCriteria 2 200.000000 15.000000 1
ImageXrayCriteria 3 200.000000 15.000000 1
ImageXrayCriteria 4 200.000000 15.000000 1
ImageXrayCriteria 5 200.000000 15.000000 1
GridMapLimits 0.000000 0.000000 0.000000 0.000000
DErefNumRepeats 10 10 10 10 10 10 10 10 10 10
DErefExposures 1.000000 1.000000 1.000000 1.000000 1.000000 1.000000 1.000000 1.000000 1.000000 1.000000
DElastRefParams 0 0 0 0
FrameAlignParams1 0 0 4 7 0.060000 0.000000 0.000000 0.000000 0 0.142900 0.000000 0 5 0 2 0 15 20
FrameAlignParams2 0 0 0.000000 4 0.100000 0 0 0 0 1 20 1 0 1 1000
FrameAliSetName 0 4K default set
FrameAlignParams1 1 0 6 7 0.050000 0.000000 0.000000 0.000000 0 0.142857 0.000000 0 5 0 2 0 15 20
FrameAlignParams2 1 0 0.000000 4 0.100000 0 0 0 0 1 20 2 0 1 1000
FrameAliSetName 1 8K default set
FrameAliGlobals 0 0 0 0 0
FalconAliUseGPU 0 0
